<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <p1:PortName>COM3</p1:PortName>
          <p1:DeviceState>Active</p1:DeviceState>
          <p1:DumpRegisters>true</p1:DumpRegisters>
          <p1:LedState>On</p1:LedState>
          <p1:VisualIndicators>On</p1:VisualIndicators>
          <p1:Heartbeat>Disable</p1:Heartbeat>
          <p1:IgnoreErrors>false</p1:IgnoreErrors>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT10S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:BehaviorEvent">
        <p2:Type>AnalogInput</p2:Type>
        <p2:Mask>Port0</p2:Mask>
      </Expression>
      <Expression xsi:type="p2:BehaviorEvent">
        <p2:Type>Input</p2:Type>
        <p2:Mask>Poke0InfraRedBeam</p2:Mask>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p3:SendKeyDown">
          <p3:KeyCode>32</p3:KeyCode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p3:SendKeyUp">
          <p3:KeyCode>32</p3:KeyCode>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MessageBytes</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>data\benchmark.bin</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="1" To="8" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>