<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1-patch"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:vr="clr-namespace:Bonsai.VR;assembly=Bonsai.VR"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>Off</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location>
            <gl:X>100</gl:X>
            <gl:Y>100</gl:Y>
          </gl:Location>
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vr:GetDevicePoses">
          <vr:ApplicationType>VRApplication_Scene</vr:ApplicationType>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.HmdViewport.bonsai">
        <NearClip>0.1</NearClip>
        <FarClip>100</FarClip>
        <Light>
          <X>0</X>
          <Y>1</Y>
          <Z>1</Z>
        </Light>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicViewport.bonsai">
        <Left>-1</Left>
        <Right>1</Right>
        <Bottom>-1</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BeamBreak</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it ? 1.0 : 0.0</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorR" />
          <Property Name="ColorG" />
          <Property Name="ColorB" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>2</ExtentX>
        <ExtentY>2</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <ColorR>0</ColorR>
        <ColorG>0</ColorG>
        <ColorB>0</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.RenderHmd.bonsai" />
      <Expression xsi:type="GroupWorkflow">
        <Name>TakeTrials</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>BeamBreak</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>20</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <p1:PortName>COM3</p1:PortName>
          <p1:DeviceState>Active</p1:DeviceState>
          <p1:DumpRegisters>true</p1:DumpRegisters>
          <p1:LedState>On</p1:LedState>
          <p1:VisualIndicators>On</p1:VisualIndicators>
          <p1:Heartbeat>Disable</p1:Heartbeat>
          <p1:IgnoreErrors>false</p1:IgnoreErrors>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:BehaviorEvent">
        <p2:Type>Input</p2:Type>
        <p2:Mask>Poke0InfraRedBeam</p2:Mask>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>BeamBreak</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MessageBytes</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>data\benchmark.bin</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:BehaviorEvent">
        <p2:Type>AnalogInput</p2:Type>
        <p2:Mask>Port0</p2:Mask>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="15" To="20" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>